PsychoPy2experiment version="2023.2.1"
Settings
  Audio latency priority = 1
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = tester2
  keyboardBackend = ioHub
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Routines
  Routine trial
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    ImageComponent trial_image_top_left
      anchor = top-center
      image [set every repeat] = $pic1_filename
      pos = (-0.5, 0.45)
      size = (.2,.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.5
      units = height
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    ImageComponent trial_image_top_right
      anchor = top-center
      image [set every repeat] = $pic2_filename
      pos = (0.5, 0.45)
      size = (.2,.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.5
      units = height
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    MouseComponent mouse_track
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = every frame
      saveParamsClickable = mouse_x,mouse_y
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.5
      timeRelativeTo = routine
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    SoundComponent target_audio
      sound [set every repeat] = $sound_filename
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5
      stopWithRoutine = False
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    MouseComponent mouse_click
      clickable = trial_image_top_left, trial_image_top_right
      correctAns = correct_response
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent warning_text
      color = 0.0039, 0.0039, 0.0039
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 4.5
      text = Please start moving the mouse earlier, even if you are not sure of your response yet!
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    CodeComponent code_4
      Code Type = Auto->JS
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      Before Experiment:
        tones.addData('mouse_click.clicked_name', mouse_click.clicked_name[0])
        tones.addData('mouse_click.corr', mouse_click.corr[0])
  Routine center_mouse
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData('windowSize', win.size)
    ImageComponent preview_image_top_left
      anchor = top-center
      image [set every repeat] = $pic1_filename
      pos = (-0.5, 0.45)
      size = (.2,.25)
      startVal [time (s)] = 0.5
      units = height
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    ImageComponent preview_image_top_right
      anchor = top-center
      image [set every repeat] = $pic2_filename
      pos = (0.5, 0.45)
      size = (.2,.25)
      startVal [time (s)] = 0.5
      units = height
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
    TextComponent target_word
      letterHeight = 0.05
      startVal [time (s)] = 1
      text [set every repeat] = $sound_word
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    PolygonComponent button
      fillColor = $[1,1,1]
      pos = (0, -0.45)
      shape = rectangle
      size = (0.1, 0.05)
      startVal [time (s)] = 1
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    MouseComponent button_mouse
      clickable = button
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 1
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  Routine thanks
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    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        The experiment is over.

        Thank you for participating!
  Routine tone_trial
    TextComponent tone_prompt
      letterHeight = 0.05
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      text = Which sound is the quietest?
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
    PolygonComponent circle_1
      fillColor = white
      pos = (-0.3, 0)
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent circle_2
      fillColor = white
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent circle_3
      fillColor = white
      pos = (0.3, 0)
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    MouseComponent tone_mouse
      clickable = tone_1, tone_2, tone_3
      correctAns = correct_response
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0
      storeCorrect = True
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    TextComponent tone_1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-0.3, 0)
      startVal [time (s)] = 0.0
      text = 1st
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    TextComponent tone_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 2nd
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    TextComponent tone_3
      color = black
      letterHeight = 0.05
      pos = (0.3, 0)
      startVal [time (s)] = 0.0
      text = 3rd
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    CodeComponent code_3
      Code Type = Auto->JS
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      End Routine:
        tones.addData('tone_mouse.clicked_name', tone_mouse.clicked_name[0])
        tones.addData('tone_mouse.corr', tone_mouse.corr[0])
  Routine tone_instr
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    TextComponent tone_instr_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Next, you will hear three tones in a row. Your task is to select the loudest tone out of the three by clicking on the first, second, or third options.

        Click anywhere to continue.
    MouseComponent tone_instr_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine practice_start
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    TextComponent practice_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task, you will first see two photos of different people on the top left and right of your screen. Then, a word and button will appear. Click the start button to play a recording of the word.

        Your task is to click on the photo of the person you think is speaking. Importantly, you must start moving your mouse immediately, even before you come to a decision about a response.

        Now you will complete a few practice rounds.

        Click anywhere to continue.
    MouseComponent practice_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine instructions
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    TextComponent instr_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this experiment, you will be listening to voices saying single words at a time, and you will be asked to pick the person you think is speaking from two photos.

        Click anywhere to start.
    MouseComponent instr_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine instructions_2
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    TextComponent instr_text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Before beginning the task, we will check that your eqiupment is working properly. Please ensure that the experiment is in full-screen mode.

        Click anywhere to continue.
    MouseComponent instr_mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine tone_end
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        nCorr = tones.data['tone_mouse.corr'].sum()
        message = f"You got {int(nCorr)} trials correct. \n\nIf you scored below 6, you will need to repeat the task. Please ensure that you are wearing properly functioning headphones and in a quiet location free of distractions. \n\nClick anywhere to continue."
    TextComponent tone_end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $message
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
    MouseComponent tone_end_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine trial_break
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    TextComponent trial_break_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Feel free to take a break.

        Click anywhere to continue.
    MouseComponent trial_break_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine trial_start
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    TextComponent trial_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now you will begin the main task.

        Remember that you will see photos and a word on the screen, then you will click a button to hear the word. Your task is to select the person you think is speaking. You should move the mouse immediately even before you make a decision.

        Click anywhere to continue.
    MouseComponent trial_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine tone_feedback
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    CodeComponent fb_code2
      Code Type = Auto->JS
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      Begin Routine:
        # Check if a mouse click was correct or not.
        # This routine will need to follow another routine with a
        # mouse component in it called "mouse" and several clickable components
        # you will also need a column in your conditions file indicating the name
        # of the correct component to click.
        # If your experiment is missing these you will see an error message.

        # If a mouse component has been added (with a correct answer column) and feedback is functioning.
        # 1. remove lines 12, 13, 15, 22 and 23.
        # 2. dedent lines 16 to 21

        fb_text = 'no mouse component found or no corrClick column- look at the Std out window for info'
        fb_col = 'black'

        try:
            if mouse.clicked_name[-1] == corrClick:
                fb_text = 'Correct!'
                fb_col = 'green'
            else:
                fb_text = 'Incorrect'
                fb_col = 'red'
        except:
            print('Make sure that you have:\n1. a routine with a mouse component in it called "mouse"\n 2. In the mouse component in the "data" tab select store data "on click".\n 3. In the conditions file have a column called "corrClicked" (where corrClicked is the name of the component to be clicked')
    TextComponent fb2
      color [set every repeat] = $fb_col
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $fb_text
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  Routine consent
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    MouseComponent consent_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        If you wish to participate, you must type in the box 'I agree to participate in this study.'

        Then, press enter on your keyboard to continue.
  Routine tone_blank
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    TextComponent tone_prompt_1
      letterHeight = 0.05
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Which sound is the quietest?
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    SoundComponent target_tone_1
      sound [set every repeat] = $sound_filename
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 4.5
      stopWithRoutine = False
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Flow
  Routine consent
  Routine instructions
  Routine instructions_2
  Routine tone_instr
  LoopInitiator tones_block loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    LoopInitiator tones loopType="TrialHandler"
      conditionsFile = lists/tones.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('list', 'tone'), ('item', 1), ('sound_filename', 'audio/toneTest_1.wav'), ('correct_response', 'tone_3')]),
        OrderedDict([('list', 'tone'), ('item', 2), ('sound_filename', 'audio/toneTest_2.wav'), ('correct_response', 'tone_2')]),
        OrderedDict([('list', 'tone'), ('item', 3), ('sound_filename', 'audio/toneTest_3.wav'), ('correct_response', 'tone_3')]),
        OrderedDict([('list', 'tone'), ('item', 4), ('sound_filename', 'audio/toneTest_4.wav'), ('correct_response', 'tone_2')]),
        OrderedDict([('list', 'tone'), ('item', 5), ('sound_filename', 'audio/toneTest_5.wav'), ('correct_response', 'tone_1')]),
        OrderedDict([('list', 'tone'), ('item', 6), ('sound_filename', 'audio/toneTest_6.wav'), ('correct_response', 'tone_1')])]
      Routine tone_blank
      Routine tone_trial
    LoopTerminator tones
    Routine tone_end
  LoopTerminator tones_block
  Routine practice_start
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = lists/practice.csv
    loopType = random
    nReps = 1
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    Routine center_mouse
    Routine trial
  LoopTerminator practice
  Routine trial_start
  LoopInitiator trials_block loopType="TrialHandler"
    loopType = random
    nReps = 5
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = lists/trials.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('list', 'test'), ('item', 1), ('audio_condition', '1N'), ('visual_condition', 'EA-EA'), ('sound_word', 'dental'), ('sound_file', 'S16_1-1-1_dental_M.wav'), ('sound_filename', 'audio/S16_1-1-1_dental_M.wav'), ('pic1_file', 'AAW-11-7688196.jpg'), ('pic2_file', 'AAW-27-11016922.jpg'), ('pic1_filename', 'images/AAW-11-7688196.jpg'), ('pic2_filename', 'images/AAW-27-11016922.jpg'), ('correct_response', 'trial_image_top_left')]),
        OrderedDict([('list', 'test'), ('item', 2), ('audio_condition', '1M'), ('visual_condition', 'EA-MA'), ('sound_word', 'dental'), ('sound_file', 'S16_1-1-3_dental_N.wav'), ('sound_filename', 'audio/S16_1-1-3_dental_N.wav'), ('pic1_file', 'AAW-11-7688196.jpg'), ('pic2_file', 'AAW-36-7951618.jpg'), ('pic1_filename', 'images/AAW-11-7688196.jpg'), ('pic2_filename', 'images/AAW-36-7951618.jpg'), ('correct_response', 'trial_image_top_left')]),
        OrderedDict([('list', 'test'), ('item', 3), ('audio_condition', '4N'), ('visual_condition', 'EA-MW'), ('sound_word', 'coding'), ('sound_file', 'S16_4-1-1_coding_M.wav'), ('sound_filename', 'audio/S16_4-1-1_coding_M.wav'), ('pic1_file', 'AAW-11-7688196.jpg'), ('pic2_file', 'WAW-12-10520196.jpg'), ('pic1_filename', 'images/AAW-11-7688196.jpg'), ('pic2_filename', 'images/WAW-12-10520196.jpg'), ('correct_response', 'trial_image_top_left')]),
        OrderedDict([('list', 'test'), ('item', 4), ('audio_condition', '4M'), ('visual_condition', 'EA-MW'), ('sound_word', 'coding'), ('sound_file', 'S16_4-1-3_coding_N.wav'), ('sound_filename', 'audio/S16_4-1-3_coding_N.wav'), ('pic1_file', 'AAW-11-7688196.jpg'), ('pic2_file', 'WAW-56-8107620.jpg'), ('pic1_filename', 'images/AAW-11-7688196.jpg'), ('pic2_filename', 'images/WAW-56-8107620.jpg'), ('correct_response', 'trial_image_top_right')])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
      Routine center_mouse
      Routine trial
    LoopTerminator trials
    Routine trial_break
  LoopTerminator trials_block
  Routine thanks
