---
API: 3
OpenSesame: 4.0.1
Platform: posix
---
set width 1024
set title "M1: Mouse Tracking Social Categorization"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend osweb
set round_decimals 2
set mouse_backend osweb
set keyboard_backend osweb
set jatos_uuid "1c654fe5-7939-d098-8667-cb5f815a2e61"
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "/Users/laurettacheng/Documents/Projects/SpAAC/02-materials/03-experiment/p1-soc-cat/m1"
set disable_garbage_collection False
set description "The main experiment item"
set color_backend osweb
set clock_backend osweb
set canvas_backend osweb
set background white

define loop block_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 6
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 AudioWord "S16_1-1-1_dental_M.wav"
	setcycle 0 PhotoLeft "AAW-25-1645500.jpg"
	setcycle 0 PhotoRight "WAW-41-7640431.jpg"
	setcycle 0 PhotoCorrect "AAW-25-1645500.jpg"
	setcycle 0 PersonaCondition "ethAsian-msWhite"
	setcycle 0 VariantCondition mainstream
	setcycle 1 AudioWord "S16_1-1-3_dental_N.wav"
	setcycle 1 PhotoLeft "AAW-25-1645500.jpg"
	setcycle 1 PhotoRight "WAW-41-7640431.jpg"
	setcycle 1 PhotoCorrect "AAW-25-1645500.jpg"
	setcycle 1 PersonaCondition "ethAsian-msWhite"
	setcycle 1 VariantCondition nonmainstream
	setcycle 2 AudioWord "S16_1-1-1_dental_M.wav"
	setcycle 2 PhotoLeft "AAW-25-1645500.jpg"
	setcycle 2 PhotoRight "AAW-55-7592431.jpg"
	setcycle 2 PhotoCorrect "AAW-25-1645500.jpg"
	setcycle 2 PersonaCondition "ethAsian-msAsian"
	setcycle 2 VariantCondition mainstream
	setcycle 3 AudioWord "S16_1-1-3_dental_N.wav"
	setcycle 3 PhotoLeft "AAW-25-1645500.jpg"
	setcycle 3 PhotoRight "AAW-55-7592431.jpg"
	setcycle 3 PhotoCorrect "AAW-25-1645500.jpg"
	setcycle 3 PersonaCondition "ethAsian-msAsian"
	setcycle 3 VariantCondition nonmainstream
	setcycle 4 AudioWord "S16_1-1-1_dental_M.wav"
	setcycle 4 PhotoLeft "AAW-55-7592431.jpg"
	setcycle 4 PhotoRight "WAW-41-7640431.jpg"
	setcycle 4 PhotoCorrect "AAW-55-7592431.jpg"
	setcycle 4 PersonaCondition "msAsian-msWhite"
	setcycle 4 VariantCondition mainstream
	setcycle 5 AudioWord "S16_1-1-3_dental_N.wav"
	setcycle 5 PhotoLeft "AAW-55-7592431.jpg"
	setcycle 5 PhotoRight "WAW-41-7640431.jpg"
	setcycle 5 PhotoCorrect "AAW-55-7592431.jpg"
	setcycle 5 PersonaCondition "msAsian-msWhite"
	setcycle 5 VariantCondition nonmainstream
	run trial_sequence

define sequence block_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run block_loop True

define form_text_display break
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Title
	set form_text "Your message"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define form_text_display end_of_experiment
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Title
	set form_text "You're done! Thank you. You will now be redirected."
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define form_text_display end_of_practice
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Title
	__form_text__
	That was the end of the practice.
	
	Press any button to begin.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run informed_consent True
	run general_instructions True
	run headphone_instructions True
	run headphone_test_loop True
	run trial_instructions True
	run practice_loop True
	run end_of_practice True
	run experimental_loop True
	run end_of_experiment True

define loop experimental_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 trials 1
	run block_sequence

define sketchpad fixation_cross
	set duration 745
	set description "Displays stimuli"
	draw fixdot color=white show_if=True style=default x=0 y=0 z_index=0
	draw fixdot color=white show_if=True style=default x=0 y=0 z_index=0
	draw fixdot color=white show_if=True style=default x=-32 y=-32 z_index=0
	draw fixdot color=white show_if=True style=default x=-32 y=-32 z_index=0
	draw fixdot color=white show_if=True style=default x=0 y=0 z_index=0
	draw fixdot color=white show_if=True style=default x=0 y=0 z_index=0
	draw fixdot color=white show_if=True style=default x=0 y=0 z_index=0
	draw fixdot color=white show_if=True style=default x=0 y=0 z_index=0
	draw fixdot color=white show_if=True style=default x=32 y=32 z_index=0
	draw fixdot color=white show_if=True style=default x=-32 y=-32 z_index=0
	draw fixdot color=white show_if=True style=default x=-32 y=-32 z_index=0
	draw fixdot color=black show_if=True style=default x=0 y=0 z_index=0

define form_text_display general_instructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Title
	set form_text "In this experiment, you will be..."
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define mousetrap_response get_response
	__warning_message__
	draw textline text="Please start moving" x=0 y=0 sketchpad=present_stimulus
	__end__
	set update_feedback yes
	set timeout infinite
	set start_coordinates "0;320"
	set skip_item no
	set sketchpad present_stimulus
	set save_trajectories yes
	set reset_mouse yes
	set number_of_buttons 2
	set mouse_buttons_allowed "left_button;right_button"
	set max_initiation_time 1000
	set logging_resolution 10
	set description "Tracks mouse movements"
	set correct_button "[CategoryCorrect]"
	set click_required yes
	set check_initiation_time no
	set button4 ""
	set button3 ""
	set button2 "[CategoryRight]"
	set button1 "[CategoryLeft]"
	set boundaries "upper=no lower=no left=no right=no"

define mousetrap_response get_start_click
	__warning_message__
	draw textline text="Please start moving" x=0 y=0 sketchpad=example
	__end__
	set update_feedback no
	set timeout infinite
	set start_coordinates "0;280"
	set skip_item no
	set sketchpad start_screen
	set save_trajectories no
	set reset_mouse no
	set number_of_buttons 1
	set mouse_buttons_allowed "left_button;right_button"
	set max_initiation_time 1000
	set logging_resolution 10
	set description "Tracks mouse movements"
	set click_required yes
	set check_initiation_time no
	set button4 ""
	set button3 ""
	set button2 ""
	set button1 Start
	set boundaries "upper=no lower=no left=no right=no"

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define form_text_display headphone_instructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Title
	__form_text__
	First, you will do this headphone check.
	
	Press any button to continue.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define loop headphone_test_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 3
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 trial 1
	setcycle 1 trial 2
	setcycle 2 trial 3
	run tone_trial_sequence

define form_text_input informed_consent
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var response
	set form_title Title
	set form_question "Do you consent to participate?"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="{form_title}"
	widget 0 1 1 1 label center=no text="{form_question}"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="{form_var}"


define logger logger
	set description "Logs experimental data"
	set auto_log yes

define sequence main_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define mouse_response mouse_click_response
	set timeout 400
	set show_cursor yes
	set linked_sketchpad target_photos_play
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define logger new_1_logger
	set description "Logs experimental data"
	set auto_log yes

define sketchpad new_1_sketchpad
	set duration 745
	set description "Displays stimuli"
	draw fixdot color=white show_if=True style=default x=0 y=0 z_index=0
	draw fixdot color=white show_if=True style=default x=0 y=0 z_index=0
	draw fixdot color=white show_if=True style=default x=-32 y=-32 z_index=0
	draw fixdot color=white show_if=True style=default x=-32 y=-32 z_index=0
	draw fixdot color=white show_if=True style=default x=0 y=0 z_index=0
	draw fixdot color=white show_if=True style=default x=0 y=0 z_index=0
	draw fixdot color=white show_if=True style=default x=0 y=0 z_index=0
	draw fixdot color=white show_if=True style=default x=0 y=0 z_index=0
	draw fixdot color=white show_if=True style=default x=32 y=32 z_index=0
	draw fixdot color=white show_if=True style=default x=-32 y=-32 z_index=0
	draw fixdot color=white show_if=True style=default x=-32 y=-32 z_index=0
	draw fixdot color=black show_if=True style=default x=0 y=0 z_index=0

define mouse_response play_mouse_click
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad target_photos_play
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define loop practice_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 trials 1
	run block_sequence

define sequence prep_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define sketchpad present_stimulus
	set duration 0
	set description "Displays stimuli"
	draw rect color=black fill=0 h=128 name="[PhotoLeft]" penwidth=1 show_if=always w=192 x=-512 y=-384 z_index=0
	draw rect color=black fill=0 h=128 name="[PhotoRight]" penwidth=1 show_if=always w=-192 x=512 y=-384 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=18 html=yes show_if=always text="[CategoryLeft]" x=-416 y=-320 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=18 html=yes show_if=always text="[CategoryRight]" x=416 y=-320 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=18 html=yes show_if=always text="[Exemplar]" x=0 y=248 z_index=0

define sketchpad start_screen
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=18 html=yes show_if=always text="Click on Start to start the next trial." x=0 y=0 z_index=0
	draw rect color=black fill=0 h=-128 name=Start penwidth=1 show_if=always w=192 x=-96 y=384 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=18 html=yes show_if=always text=Start x=0 y=320 z_index=0

define loop stimuli
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial
	set description "Repeatedly runs another item"
	set cycles 6
	set continuous no
	set column_order "Condition;CategoryLeft;CategoryRight;CategoryCorrect;Exemplar"
	set break_if_on_first yes
	set break_if never
	setcycle 0 AudioWord "S16_1-1-1_dental_M.wav"
	setcycle 0 PhotoLeft "AAW-25-1645500.jpg"
	setcycle 0 PhotoRight "WAW-41-7640431.jpg"
	setcycle 0 PhotoCorrect "AAW-25-1645500.jpg"
	setcycle 0 PersonaCondition "ethAsian-msWhite"
	setcycle 0 VariantCondition mainstream
	setcycle 1 AudioWord "S16_1-1-3_dental_N.wav"
	setcycle 1 PhotoLeft "AAW-25-1645500.jpg"
	setcycle 1 PhotoRight "WAW-41-7640431.jpg"
	setcycle 1 PhotoCorrect "AAW-25-1645500.jpg"
	setcycle 1 PersonaCondition "ethAsian-msWhite"
	setcycle 1 VariantCondition nonmainstream
	setcycle 2 AudioWord "S16_1-1-1_dental_M.wav"
	setcycle 2 PhotoLeft "AAW-25-1645500.jpg"
	setcycle 2 PhotoRight "AAW-55-7592431.jpg"
	setcycle 2 PhotoCorrect "AAW-25-1645500.jpg"
	setcycle 2 PersonaCondition "ethAsian-msAsian"
	setcycle 2 VariantCondition mainstream
	setcycle 3 AudioWord "S16_1-1-3_dental_N.wav"
	setcycle 3 PhotoLeft "AAW-25-1645500.jpg"
	setcycle 3 PhotoRight "AAW-55-7592431.jpg"
	setcycle 3 PhotoCorrect "AAW-25-1645500.jpg"
	setcycle 3 PersonaCondition "ethAsian-msAsian"
	setcycle 3 VariantCondition nonmainstream
	setcycle 4 AudioWord "S16_1-1-1_dental_M.wav"
	setcycle 4 PhotoLeft "AAW-55-7592431.jpg"
	setcycle 4 PhotoRight "WAW-41-7640431.jpg"
	setcycle 4 PhotoCorrect "AAW-55-7592431.jpg"
	setcycle 4 PersonaCondition "msAsian-msWhite"
	setcycle 4 VariantCondition mainstream
	setcycle 5 AudioWord "S16_1-1-3_dental_N.wav"
	setcycle 5 PhotoLeft "AAW-55-7592431.jpg"
	setcycle 5 PhotoRight "WAW-41-7640431.jpg"
	setcycle 5 PhotoCorrect "AAW-55-7592431.jpg"
	setcycle 5 PersonaCondition "msAsian-msWhite"
	setcycle 5 VariantCondition nonmainstream
	run trial

define sampler target_audio
	set volume 1
	set stop_after 0
	set sample "{audio_filename}"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration mouseclick
	set description "Plays a sound file in .wav or .ogg format"

define sketchpad target_photos
	set duration 445
	set description "Displays stimuli"
	draw image center=1 file="{photo_left_filename}" scale=1 show_if=True x=-352 y=-192 z_index=0
	draw image center=1 file="{photo_right_filename}" scale=1 show_if=True x=352 y=-192 z_index=0

define sketchpad target_photos_play
	set duration 445
	set description "Displays stimuli"
	draw image center=1 file="{photo_left_filename}" scale=1 show_if=True x=-352 y=-192 z_index=0
	draw image center=1 file="{photo_right_filename}" scale=1 show_if=True x=352 y=-192 z_index=0

define sketchpad target_photos_select
	set duration 445
	set description "Displays stimuli"
	draw image center=1 file="{photo_left_filename}" scale=1 show_if=True x=-352 y=-192 z_index=0
	draw image center=1 file="{photo_right_filename}" scale=1 show_if=True x=352 y=-192 z_index=0

define sequence tone_trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_1_sketchpad True

define sequence trial
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run start_screen always
	run get_start_click always
	run present_stimulus always
	run get_response always
	run new_1_logger always

define form_text_display trial_instructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Title
	__form_text__
	Now you will do some practice trials.
	
	Press any button to continue.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_cross True
	run target_photos True
	run target_photos_play True
	run play_mouse_click True
	run target_audio True
	run target_photos_select True
	run mouse_click_response True
	run logger True

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=True text="OpenSesame 4.0 <i>Melodramatic Milgram</i>" x=0 y=0 z_index=0

